Export_Data_To_Ascii_File
/SIGNAL_TYPES=EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+EVENT_LABEL+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC+METRIC
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=1Frame+firstFC+firstFO+firstRFC+firstRFO+L+lastFC+lastRFC+LFC1+LFC2+LFC3+LFC4+LFCPost1+LFCPost2+LFCPost3+LFCPost4+LFO1+LFO2+LFO3+LFO4+LFOPre1+LFOPre2+LFOPre3+LFOPre4+PO+Pre+REALFIRSTFC+REALFIRSTFO+REALLASTFC+REALLASTFC100+RFC1+RFC1Mt+RFC2+RFC3+RFC4+RFC5Mt+RFCPost1+RFCPost2+RFCPost3+RFCPost4+RFCs+RFCsPost+RFO1+RFO2+RFO3+RFO4+RFOPre1+RFOPre2+RFOPre3+RFOPre4+RFOs+RFOsPre+RMtDispZ+RMtVR_StepMin+RMtVR_StepMinPost+RMtVR_StepMinPre+EOF+firstLFC+firstLFO+lastLFC+LFCs+LFCsPost+LFOs+LFOsPre+LMtDispZ+LMtVR_StepMin+LMtVR_StepMinPost+LMtVR_StepMinPre+MisBOSMaxDat+MisBOSMinDat+MisDatDiagonalPert:RWrist+MisDatDiagonalPert:RElbow+COMdisp_LFC1+COMdisp_LFC2+COMdisp_LFC3+COMdisp_LFC4+COMdisp_LFO1+COMdisp_LFO2+COMdisp_LFO3+COMdisp_LFO4+COMdisp_RFC1+COMdisp_RFC2+COMdisp_RFC3+COMdisp_RFC4+COMdisp_RFO1+COMdisp_RFO2+COMdisp_RFO3+COMdisp_RFO4+COMdispMax+COMdispMin+COMposnStart+COMvel_LFC1+COMvel_LFC2+COMvel_LFC3+COMvel_LFC4+COMvel_LFO1+COMvel_LFO2+COMvel_LFO3+COMvel_LFO4+COMvel_RFC1+COMvel_RFC2+COMvel_RFC3+COMvel_RFC4+COMvel_RFO1+COMvel_RFO2+COMvel_RFO3+COMvel_RFO4+COMvelMax+COMvelMin+L1Mtdisp_LFC1+L1Mtdisp_LFC2+L1Mtdisp_LFC3+L1Mtdisp_LFC4+L1Mtdisp_LFO1+L1Mtdisp_LFO2+L1Mtdisp_LFO3+L1Mtdisp_LFO4+L1Mtdisp_RFC1+L1Mtdisp_RFC2+L1Mtdisp_RFC3+L1Mtdisp_RFC4+L1Mtdisp_RFO1+L1Mtdisp_RFO2+L1Mtdisp_RFO3+L1Mtdisp_RFO4+L1MtdispMax+L1MtdispMin+L1MtStart+L1MtvelMax+L1MtvelMin+L5MtAccMax+L5MtAccRMax+L5Mtdisp_LFC1+L5Mtdisp_LFC2+L5Mtdisp_LFC3+L5Mtdisp_LFC4+L5Mtdisp_LFO1+L5Mtdisp_LFO2+L5Mtdisp_LFO3+L5Mtdisp_LFO4+L5Mtdisp_RFC1+L5Mtdisp_RFC2+L5Mtdisp_RFC3+L5Mtdisp_RFC4+L5Mtdisp_RFO1+L5Mtdisp_RFO2+L5Mtdisp_RFO3+L5Mtdisp_RFO4+L5MtdispMax+L5MtdispMin+L5MtdispRMax+L5MtStart+L5MtvelMax+L5MtvelMin+L5MtvelRMax+L5MtxyRMax+R1Mtdisp_LFC1+R1Mtdisp_LFC2+R1Mtdisp_LFC3+R1Mtdisp_LFC4+R1Mtdisp_LFO1+R1Mtdisp_LFO2+R1Mtdisp_LFO3+R1Mtdisp_LFO4+R1Mtdisp_RFC1+R1Mtdisp_RFC2+R1Mtdisp_RFC3+R1Mtdisp_RFC4+R1Mtdisp_RFO1+R1Mtdisp_RFO2+R1Mtdisp_RFO3+R1Mtdisp_RFO4+R1MtdispMax+R1MtdispMin+R1MtStart+R1MtvelMax+R1MtvelMin+R5MtAccMax+R5MtAccRMax+R5Mtdisp_LFC1+R5Mtdisp_LFC2+R5Mtdisp_LFC3+R5Mtdisp_LFC4+R5Mtdisp_LFO1+R5Mtdisp_LFO2+R5Mtdisp_LFO3+R5Mtdisp_LFO4+R5Mtdisp_RFC1+R5Mtdisp_RFC2+R5Mtdisp_RFC3+R5Mtdisp_RFC4+R5Mtdisp_RFO1+R5Mtdisp_RFO2+R5Mtdisp_RFO3+R5Mtdisp_RFO4+R5MtdispMax+R5MtdispMin+R5MtdispRMax+R5MtStart+R5MtvelMax+R5MtvelMin+R5MtvelRMax+R5MtxyRMax+Rsteps+Lsteps
/FILE_NAME=\\Mac\Home\Desktop\mpl-summer-2022\diagonal-perts\test.json
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/COMPONENT_SEQUENCE=ALL
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /EXPORT_MEAN_AND_STD_DEV_FOR_METRIC=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
/USE_JSON_FORMAT=TRUE
/USE_SHORT_FILENAME=TRUE
! /INCLUDE_TAGS_FOR_XML=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;
